PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DichoticListeningProbe
  frameRateMsg = Espera mientras se configura el experimento...
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Listening
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    CodeComponent code_listening
      Code Type = Auto->JS
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      Begin Routine:
        # Add metadata log
        thisExp.addData('attended_story', attended_story_)
        thisExp.addData('audio_filepath', audio_filepath_)
        thisExp.addData('target_label', target_label_)
        thisExp.addData('target', target)
        thisExp.addData('story_L', story_L)
        thisExp.addData('story_R', story_R)
        thisExp.addData('voice_L', voice_L)
        thisExp.addData('voice_R', voice_R)

        # Set correct audio
        audiobook = audios[condition_trials.thisN]
        #port.write(bytes([int(100)]))
        print(100)
        # t is measured since routine start
        thisExp.addData("time_audiobook_started",t)
        audiobook.play()
      Each Frame:
        # When time exceed audiobook duration, end component
        # t is measured since routine start
        if t >= audiobook.duration:
            continueRoutine = False
            audiobook.stop()
            thisExp.addData("time_audiobook_finished",t)
      End Routine:
        #port.write(bytes([int(105)]))
        print(105)
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine Instructions
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    CodeComponent code_row_selection
      Code Type = Auto->JS
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      Before Experiment:
        #import serial
        #port = serial.Serial(
        #    'COM3', baudrate=115200, timeout=0
        #)
      Begin Experiment:
        from psychopy import sound
        import pandas as pd
        import random

        # Define which rows to use
        NUMBER_OF_PAIRS=5
        selected_rows = random.sample(
            range(8), NUMBER_OF_PAIRS
        )
        thisExp.addData('selected_rows', selected_rows)

        # Read conditions, possible stimuli combinations and questionaries
        conditions = pd.read_csv(
            "conditions.csv",
            header=0,
            delimiter=','
        )
        audiobook_combinations = pd.read_csv(
            "audiobook_combinations_probes_pruebas.csv",
            header=0,
            delimiter=','
        )
        audiobook_questionary = pd.read_csv(
            "audiobook_questionary.csv",
            header=0,
            delimiter=','
        )

        # Store in memory audiobooks and relevant parameters
        attended_stories = []
        audio_filepaths = []
        questionaries = []
        conditions_labels = []
        stories_L = []
        stories_R = []
        voices_L = []
        voices_R = []
        targets = []
        audios = []
        for n_r, row in enumerate(selected_rows):
            condition_selected = conditions.iloc[row]
            target = condition_selected['target']
            target_label = condition_selected['target_label']
            conditions_labels.append(target_label)
            targets.append(target)

            # Define filepath and attended story
            filter_condition = audiobook_combinations['condition_label']==target_label
            audiobooks_possible_combinations = audiobook_combinations[filter_condition]

            # Get pairs, 1,2; 3,4; 5,6; ...
            n_story = (n_r+1)*2-1 # 1,3,5,7, ...
            filter_A = audiobooks_possible_combinations['story_L']==n_story
            filter_B = audiobooks_possible_combinations['story_R']==n_story
            selected_audiobook = audiobooks_possible_combinations[filter_A|filter_B]

            audio_filepath = selected_audiobook['filename'].values[0]
            audio_filepaths.append(audio_filepath)
            stories_L.append(selected_audiobook['story_L'].values[0])
            stories_R.append(selected_audiobook['story_R'].values[0])
            voices_L.append(selected_audiobook['voice_L'].values[0])
            voices_R.append(selected_audiobook['voice_R'].values[0])

            audios.append(
                sound.Sound(audio_filepath , hamming=True)
            )
            attended_story = selected_audiobook[f'story_{target}'].values[0]
            attended_stories.append(attended_story)
            questionaries.append(
                audiobook_questionary.iloc[attended_story-1]
            )
        print(attended_stories)
        print(audio_filepaths)
        print(questionaries)
        print(conditions)
        print(targets)
        print(audios)
      Begin Routine:
        #port.write(bytes([int(25)]))
        print(25)
      End Routine:
        #port.write(bytes([int(30)]))
        print(25)
    KeyboardComponent key_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [condition] = key_instructions.status == FINISHED
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      text [set every frame]:
        En cada ensayo escucharás dos historias simultáneas (una en cada oído). Tus tareas son

        1) Mantenerte quieto/a y mirar la cruz central.

        2) Prestar atención sólo a la historia indicada.

        3) Responder las preguntas con el teclado.

        Presioná ESPACIO para continuar...
  Routine Questionary3
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  Routine GoodBye
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    CodeComponent code_bye
      Code Type = Auto->JS
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      Begin Routine:
        #port.write(bytes([int(230)])
        print(230)
      End Routine:
        #port.write(bytes([int(240)])
        print(240)
    KeyboardComponent final_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent final_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = final_key.status == FINISHED
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      text:
        ¡Listo! Terminó el experimento. ¡Gracias por participar!



        Apretá ESPACIO para finalizar...
  Routine Bips
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    CodeComponent code_bip
      Code Type = Auto->JS
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      Begin Routine:
        if currentLoop.name == "bip_trials1":
            trigger = 45
        else:
            trigger = 150

        #port.write(bytes([int(trigger+currentLoop.thisN*3)]))
        print(int(trigger+currentLoop.thisN*3))

        # When the loop reaches the end, there will be no silence added
        if currentLoop.thisN == (currentLoop.nTotal - 1):
            final_silence.status = FINISHED
      End Routine:
        #port.write(bytes([int(trigger+currentLoop.thisN*3+1)]))
        print(int(trigger+currentLoop.thisN*3+1))
    SoundComponent bip
      forceEndRoutine = False
      sound [set every repeat] = ../data/processed_audios/bip.ogg
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_bip
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [condition] = bip.status == FINISHED 
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    PolygonComponent final_silence
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = bip.status==FINISHED
      stopVal [duration (s)] = 0.5
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  Routine ConditionPrompt
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    CodeComponent code_prompt
      Code Type = Auto->JS
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      Begin Routine:
        #port.write(bytes([int(35)]))
        print(35)

        flecha='<<<'  if target=='Left' else '>>>'
        lado='IZQUIERDO' if target=='Left' else 'DERECHO'

        attended_story_ = attended_stories[condition_trials.thisN]
        audio_filepath_ = audio_filepaths[condition_trials.thisN]
        questionary_ = questionaries[condition_trials.thisN]
        target_label_ = conditions_labels[condition_trials.thisN]
        story_L = stories_L[condition_trials.thisN]
        story_R = stories_R[condition_trials.thisN]
        voice_L = voices_L[condition_trials.thisN]
        voice_R = voices_R[condition_trials.thisN]

        # Define new variables
        correct_answers = []
        questions = []
        answers_a = []
        answers_b = []
        answers_c = []
        for i in range(1, 4):
            correct_answer = questionary_[f'correct_answer{i}']
            question = questionary_[f'question{i}']
            answer_a = questionary_[f'answer{i}a']
            answer_b = questionary_[f'answer{i}b']
            answer_c = questionary_[f'answer{i}c']
            correct_answers.append(correct_answer)
            questions.append(question)
            answers_a.append(answer_a)
            answers_b.append(answer_b)
            answers_c.append(answer_c)
      End Routine:
        #port.write(bytes([int(40)])
        print(40)
    TextComponent text_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_prompt.status == FINISHED
      text [set every repeat] = $f"Presta atención a la historia del lado {lado} ({flecha}).\n\n\nApretá ESPACIO para continuar..."
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    KeyboardComponent key_resp_prompt
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Questionary
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    CodeComponent code_questionary
      Code Type = Auto->JS
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      Begin Routine:
        question = questions[questions_trial.thisRepN-1]
        correct_answer = correct_answers[questions_trial.thisRepN-1]
        answer_a = answers_a[questions_trial.thisRepN-1]
        answer_b = answers_b[questions_trial.thisRepN-1]
        answer_c = answers_c[questions_trial.thisRepN-1]

        #port.write(bytes([int(200+currentLoop.thisN*3)]))
        print(int(200+currentLoop.thisN*3))

        thisExp.addData(f'correct_answer{questions_trial.thisRepN-1}', correct_answer)
        thisExp.addData(f'question{questions_trial.thisRepN-1}', question)
        thisExp.addData(f'answer_a{questions_trial.thisRepN-1}', answer_a)
        thisExp.addData(f'answer_b{questions_trial.thisRepN-1}', answer_b)
        thisExp.addData(f'answer_c{questions_trial.thisRepN-1}', answer_c)
      End Routine:
        #port.write(bytes([int(200+1+currentLoop.thisN*3)]))
        print(int(200+1+currentLoop.thisN*3))
    KeyboardComponent key_resp_questionary
      allowedKeys = 'a', 'b', 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent questionary_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_questionary.status == FINISHED
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      text [set every repeat]:
        $f"{question}\n\n A: {answer_a}\n\n B: {answer_b}\n\n C: {answer_c}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
  Routine QuestionaryVariables
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    CodeComponent code_questionary_2
      Code Type = Auto->JS
  Routine Listening1
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = C:/Users/jocta/repos/Dichotic/data/processed_audios/attention_probe.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  Routine Questionary0
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    CodeComponent code_questionary0
      Code Type = Auto->JS
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      Begin Routine:
        #port.write(bytes([int(200+0*3)]))
        print(int(200+0*3))

        thisExp.addData(f'correct_answer0', correct_answers[0])
        thisExp.addData(f'question0', questions[0])
        thisExp.addData(f'answer_a0', answers_a[0])
        thisExp.addData(f'answer_b0', answers_b[0])
        thisExp.addData(f'answer_c0', answers_c[0])
      End Routine:
        #port.write(bytes([int(200+1+0*3)]))
        print(int(200+1+0*3))
    TextComponent questionary_text0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_questionary0.status == FINISHED
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      text [set every repeat]:
        $f"{questions[0]}\n\n A: {answers_a[0]}\n\n B: {answers_b[0]}\n\n C: {answers_c[0]}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
    KeyboardComponent key_resp_questionary0
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Questionary1
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    CodeComponent code_questionary1
      Code Type = Auto->JS
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      Begin Routine:
        #port.write(bytes([int(200+1*3)]))
        print(int(200+1*3))
        correct_answers
        thisExp.addData(f'correct_answer1', correct_answers[1])
        thisExp.addData(f'question1', questions[1])
        thisExp.addData(f'answer_a1', answers_a[1])
        thisExp.addData(f'answer_b1', answers_b[1])
        thisExp.addData(f'answer_c1', answers_c[1])
      End Routine:
        #port.write(bytes([int(200+1+1*3)]))
        print(int(200+1+1*3))
    TextComponent questionary_text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_questionary1.status == FINISHED
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      text [set every repeat]:
        $f"{questions[1]}\n\n A: {answers_a[1]}\n\n B: {answers_b[1]}\n\n C: {answers_c[1]}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
    KeyboardComponent key_resp_questionary1
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Questionary2
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    CodeComponent code_questionary2
      Code Type = Auto->JS
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      Begin Routine:
        #port.write(bytes([int(200+2*3)]))
        print(int(200+2*3))

        thisExp.addData(f'correct_answer2', correct_answers[2])
        thisExp.addData(f'question2', questions[2])
        thisExp.addData(f'answer_a2', answers_a[2])
        thisExp.addData(f'answer_b2', answers_b[2])
        thisExp.addData(f'answer_c2', answers_c[2])
      End Routine:
        #port.write(bytes([int(200+1+2*3)]))
        print(int(200+1+2*3))
    TextComponent questionary_text2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_questionary2.status == FINISHED
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      text [set every repeat]:
        $f"{questions[2]}\n\n A: {answers_a[2]}\n\n B: {answers_b[2]}\n\n C: {answers_c[2]}\n\n Presioná la opción que creas correcta (teclas A, B ó C)"
    KeyboardComponent key_resp_questionary2
      allowedKeys = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator condition_trials loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ordered', np.True_), ('voice_L', 'F'), ('voice_R', 'M'), ('target', 'L'), ('target_label', 'O_F_M')]),
      OrderedDict([('ordered', np.True_), ('voice_L', 'F'), ('voice_R', 'M'), ('target', 'R'), ('target_label', 'O_F_M')]),
      OrderedDict([('ordered', np.True_), ('voice_L', 'M'), ('voice_R', 'F'), ('target', 'L'), ('target_label', 'O_M_F')]),
      OrderedDict([('ordered', np.True_), ('voice_L', 'M'), ('voice_R', 'F'), ('target', 'R'), ('target_label', 'O_M_F')]),
      OrderedDict([('ordered', np.False_), ('voice_L', 'F'), ('voice_R', 'M'), ('target', 'L'), ('target_label', 'NO_F_M')]),
      OrderedDict([('ordered', np.False_), ('voice_L', 'F'), ('voice_R', 'M'), ('target', 'R'), ('target_label', 'NO_F_M')]),
      OrderedDict([('ordered', np.False_), ('voice_L', 'M'), ('voice_R', 'F'), ('target', 'L'), ('target_label', 'NO_M_F')]),
      OrderedDict([('ordered', np.False_), ('voice_L', 'M'), ('voice_R', 'F'), ('target', 'R'), ('target_label', 'NO_M_F')])]
    Routine ConditionPrompt
    LoopInitiator bip_trials1 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 1
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      Routine Bips
    LoopTerminator bip_trials1
    Routine Listening
    LoopInitiator bip_trials2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Bips
    LoopTerminator bip_trials2
    Routine Questionary0
    Routine Questionary1
    Routine Questionary2
  LoopTerminator condition_trials
  Routine GoodBye
