PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = dichotic_listening
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Listening
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    CodeComponent audiobook_code
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
        audiobook_combinations = pd.read_csv(
            "audiobook_combinations_probes.csv",
            header=0,
            delimiter=','
        )
        audiobook_questionary = pd.read_csv(
            "audiobook_combinations_probes.csv",
            header=0,
            delimiter=','
        )
      Begin Routine:
        audiobooks_possible_combinations = audiobook_combinations[audiobook_combinations['condition_label']==condition_label]
        ear = 'L' if target=='Left' else 'R'
        n_story = trials.thisRepN*2-1
        if condition_label[-2:]=='AB':
            audiobook_df = audiobooks_possible_combinations[audiobooks_possible_combinations['number_story_A']==n_story]
            audiofile_path = audiobook_df['filename']
        elif condition_label[-2:]=='BA':
            audiobook_df = audiobooks_possible_combinations[audiobooks_possible_combinations['number_story_A']==n_story+1]
            audiofile_path = audiobook_df['filename']

        if condition_label.split('F')[-1][0]==ear:
            attended_story = audiobook_df['number_story_A']
        else:
            attended_story = audiobook_df['number_story_B']
        questionary = audiobook_questionary.iloc[n_story-1]
        print(questionary.head())
        # Add to log
        thisExp.addData('audiofile_path', audiofile_path)
        thisExp.addData('attended_story', attended_story)

        # Define new variables
        correct_answers = []
        questions = []
        answers_a = []
        answers_b = []
        answers_c = []
        for i in range(1, 4):
            correct_answer = questionary[f'correct_answer{i}']
            question = questionary[f'question{i}']
            answer_a = questionary[f'answer{i}a']
            answer_b = questionary[f'answer{i}b']
            answer_c = questionary[f'answer{i}c']
            # Add to log
            # thisExp.addData(f'correct_answer{i}', correct_answer)
            # thisExp.addData(f'question{i}', question)
            # thisExp.addData(f'answer{i}a', answer_a)
            # thisExp.addData(f'answer{i}b', answer_b)
            # thisExp.addData(f'answer{i}c', answer_c)
    SoundComponent audiobook
      forceEndRoutine = False
      sound [set every repeat] = $audiofile_path
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_listening
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = audiobook.status == FINISHED
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  Routine Instructions
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    KeyboardComponent key_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [condition] = key_instructions.status == FINISHED
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      text:
        En este experimento se repetirán varios ensayos en los cuales vas a tener que escuchar diferentes historias.

        Ponete comodo/a, intenta no mover mucho el cuerpo y tratá de fijar la mirada en la cruz que aparecerá en el centro de la pantalla.

        En cada ensayo se presentaran dos historias, una en cada oreja. La idea es que prestes atención únicamente a la historia que se te indique en cada ensayo. Luego, habrá unas preguntas de comprensión que deberás responder con el teclado.

        Cuando estes listo/a apretá la barra espaciadora para continuar...
  Routine Questionary2
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  Routine Questionary3
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  Routine GoodBye
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  Routine Bips
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    SoundComponent bip
      deviceLabel = Realtek
      forceEndRoutine = False
      sound [set every repeat] = ../data/bip.wav
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_bip
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = bip.status == FINISHED
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  Routine ConditionPrompt
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    CodeComponent prompt_code
      Code Type = Auto->JS
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      Begin Routine:
        lado='izquierdo' if target=='Left' else 'derecho'
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = key_resp_prompt.status == FINISHED
      text [set every repeat] = $f"Presta atención a la historia del lado {lado}.\n\n\nPresioná la barra espaciadora para continuar..."
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    KeyboardComponent key_resp_prompt
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Questionary
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        question = questions[questions_trial.thisRepN]
        correct_answer = correct_answers[questions_trial.thisRepN]
        answer_a = answers_a[questions_trial.thisRepN]
        answer_b = answers_b[questions_trial.thisRepN]
        answer_c = answers_c[questions_trial.thisRepN]
    KeyboardComponent key_resp_questionary
      allowedKeys = 'a', 'b', 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent questionary_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = key_resp_questionary.status == FINISHED
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      text [set every repeat]:
        $f"{question}\n\n A: {answer_a}\n B: {answer_b}\n C: {answer_c}\n Presioná la opción que creas correcta (teclas A, B ó C)"
Flow
  Routine Instructions
  LoopInitiator condition_trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 7
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    conditions:
      [{'story_a_side': 'left', 'story_b_side': 'right', 'story_a_voice': 'F', 'story_b_voice': 'M', 'condition_label': 'FL_MR_AB', 'target': 'Left'},
      {'story_a_side': 'left', 'story_b_side': 'right', 'story_a_voice': 'F', 'story_b_voice': 'M', 'condition_label': 'FL_MR_AB', 'target': 'Right'},
      {'story_a_side': 'left', 'story_b_side': 'right', 'story_a_voice': 'M', 'story_b_voice': 'F', 'condition_label': 'FR_ML_AB', 'target': 'Left'},
      {'story_a_side': 'left', 'story_b_side': 'right', 'story_a_voice': 'M', 'story_b_voice': 'F', 'condition_label': 'FR_ML_AB', 'target': 'Right'},
      {'story_a_side': 'right', 'story_b_side': 'left', 'story_a_voice': 'F', 'story_b_voice': 'M', 'condition_label': 'FL_MR_BA', 'target': 'Left'},
      {'story_a_side': 'right', 'story_b_side': 'left', 'story_a_voice': 'F', 'story_b_voice': 'M', 'condition_label': 'FL_MR_BA', 'target': 'Right'},
      {'story_a_side': 'right', 'story_b_side': 'left', 'story_a_voice': 'M', 'story_b_voice': 'F', 'condition_label': 'FR_ML_BA', 'target': 'Left'},
      {'story_a_side': 'right', 'story_b_side': 'left', 'story_a_voice': 'M', 'story_b_voice': 'F', 'condition_label': 'FR_ML_BA', 'target': 'Right'}]
    Routine ConditionPrompt
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine Bips
    LoopTerminator trials
    Routine Listening
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 20
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      Routine Bips
    LoopTerminator trials_2
    LoopInitiator questions_trial loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine Questionary
    LoopTerminator questions_trial
  LoopTerminator condition_trials
  Routine GoodBye
